// parameter file for rotation registration 
// some attempts at making it fast and still useful
// SLH 2016

// ******** General Settings ********

// Only write the final image
(WriteResultImage "true")
(CompressResultImage "false")

// Save time by not writing parameters
(WriteTransformParametersEachResolution "false")
(WriteTransformParametersEachIteration "false")

(ShowExactMetricValue "false")

//Default pixel value for pixels that come from outside the picture
(DefaultPixelValue 0)

// The pixel type and format of the resulting deformed moving image
//(ResultImageFormat "mhd")

// Unsigned short works with tiff
// only writes tiled tiff files... fix afterwards
(ResultImageFormat "tiff")
(ResultImagePixelType "unsigned short")

(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")

(FixedImageDimension 2)
(MovingImageDimension 2)

(UseDirectionCosines "true")

// **************** Main Components **************************

// The following components should usually be left as they are:
(Registration "MultiResolutionRegistration")
(Interpolator "BSplineInterpolator")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")

// These may be changed to Fixed/MovingSmoothingImagePyramid.
// See the manual.
(FixedImagePyramid "FixedRecursiveImagePyramid")
(MovingImagePyramid "MovingRecursiveImagePyramid")

// The following components are most important:
// The optimizer AdaptiveStochasticGradientDescent (ASGD) works
// quite ok in general. The Transform and Metric are important
// and need to be chosen careful for each application. See manual.
(Optimizer "AdaptiveStochasticGradientDescent")

(Metric "AdvancedMattesMutualInformation")

// SPEED INCREASE: Use the faster version of Mattes mutual info
(UseFastAndLowMemoryVersion "true") 


(UseAdaptiveStepSizes "true")

// ***************** Transformation **************************

// Use a rigid transformation
(Transform "EulerTransform")

(AutomaticParameterEstimation "true")

// Scales the rotations compared to the translations, to make
// sure they are in the same range. In general, it's best to  
// use automatic scales estimation:
(AutomaticScalesEstimation "true")

// Automatically guess an initial translation by aligning the
// geometric centers of the fixed and moving.
(AutomaticTransformInitialization "true")

// Whether transforms are combined by composition or by addition.
// In generally, Compose is the best option in most cases.
// It does not influence the results very much.
(HowToCombineTransforms "Compose")

// ******************* Similarity measure *********************

// Mask options
(ErodeMask "false")
(ErodeFixedMask "false")
(ErodeMovingMask "true")

// Number of grey level bins in each resolution level,
// Need to specify histogram bins for each mask, can be
// hierarchical e.g. (.. 16 32)
(NumberOfHistogramBins 16 32 64)
(NumberOfFixedHistogramBins 16 32 64)
(NumberOfMovingHistogramBins 16 32 64)

// ******************** Multiresolution **********************

// The number of resolutions. 1 Is only enough if the expected
// deformations are small. 3 or 4 mostly works fine. For large
// images and large deformations, 5 or 6 may even be useful.
(NumberOfResolutions 3)

// The downsampling/blurring factors for the image pyramids.
// By default, the images are downsampled by a factor of 2
// compared to the next resolution.
// So, in 2D, with 4 resolutions, the following schedule is used:
//(ImagePyramidSchedule 8 8  4 4  2 2  1 1 )
// And in 3D:
//(ImagePyramidSchedule 8 8 8  4 4 4  2 2 2  1 1 1 )
// You can specify any schedule, for example:
//(ImagePyramidSchedule 4 4  4 3  2 1  1 1 )

// Make sure that the number of elements equals the number
// of resolutions times the image dimension.

// Use lower resolutions to speed things up
(ImagePyramidSchedule 8 8 4 4 1 1)

// ******************* Optimizer ****************************

// Maximum number of iterations in each resolution level:
// 200-500 works usually fine for rigid registration.
// For more robustness, you may increase this to 1000-2000.
(MaximumNumberOfIterations 150 200 300)

// The step size of the optimizer, in mm. By default the voxel size is used.
// which usually works well. In case of unusual high-resolution images
// (eg histology) it is necessary to increase this value a bit, to the size
// of the "smallest visible structure" in the image:
//(MaximumStepLength 1.0)
// MaximumStepLength is used when AutomaticParameterEstimation is on
(MaximumStepLength 4.0)

// **************** Image sampling **********************

// Number of spatial samples used to compute the mutual
// information (and its derivative) in each iteration.
// With an AdaptiveStochasticGradientDescent optimizer,
// in combination with the two options below, around 2000
// samples may already suffice.
// (NumberOfSpatialSamples 2048)
(NumberOfSpatialSamples 1250)

// Refresh these spatial samples in every iteration, and select
// them randomly. See the manual for information on other sampling
// strategies.
(NewSamplesEveryIteration "true")
(ImageSampler "Random")

// ************* Interpolation and Resampling ****************

// Order of B-Spline interpolation used during registration/optimisation.
// It may improve accuracy if you set this to 3. Never use 0.
// An order of 1 gives linear interpolation. This is in most 
// applications a good choice.
(BSplineInterpolationOrder 1)

// Order of B-Spline interpolation used for applying the final
// deformation.
// 3 gives good accuracy; recommended in most cases.
// 1 gives worse accuracy (linear interpolation)
// 0 gives worst accuracy, but is appropriate for binary images
// (masks, segmentations); equivalent to nearest neighbor interpolation.
// (FinalBSplineInterpolationOrder 3)
(FinalBSplineInterpolationOrder 3)
